PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = Samsung
  Screen = 2
  Units = height
  Window size (pixels) = [3840, 1203]
  expName = trk-encoding
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Routines
  Routine setup
    VariableComponent stimuli_table
      startExpValue = 'encoding_table.csv'
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  Routine trials_run_1
    ImageComponent main_image
      image [set every repeat] = $TripletMemberA
      pos [set every repeat] = (Xcoordinate,Ycoordinate)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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Flow
  Routine setup
  LoopInitiator run_1 loopType="TrialHandler"
    Selected rows = 0:83
    conditionsFile = $stimuli_table
    loopType = sequential
    nReps = 1
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    Routine trials_run_1
  LoopTerminator run_1
